<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.LicketySplit;assembly=AllenNeuralDynamics.LicketySplit"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:p2="clr-namespace:Harp.SoundCard;assembly=Harp.SoundCard"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Lickometers</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpLickometerLeftEvents</Name>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:TimestampedLickState" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="HasFlag">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p1:LickChannels">
                <Value>Channel0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpLickometerRightEvents</Name>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:TimestampedLickState" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="HasFlag">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p1:LickChannels">
                <Value>Channel0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>IsRightLickEvent</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="17" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="15" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RewardDelivery</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Annotation">
              <Name>TODO</Name>
              <Text><![CDATA[Value needs to come from task logic for reward volume ul]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RewardVolume</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>IsGiveRewardRight</rx:Name>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>SetRewardAmount</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RewardVolume</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Calibration.WaterValveLeft</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>RewardToTime</scr:Name>
                    <scr:Expression>((Item1 * 0.001) - Item2.Offset) / Item2.Slope </scr:Expression>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>ToMilliseconds</Name>
                    <Text><![CDATA[]]></Text>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="DoubleProperty">
                      <Value>1000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Value" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>GreaterThan0</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="beh:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="beh:PulseSupplyPort0" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpBehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RewardVolume</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Calibration.WaterValveRight</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>RewardToTime</scr:Name>
                    <scr:Expression>((Item1 * 0.001) - Item2.Offset) / Item2.Slope </scr:Expression>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>ToMilliseconds</Name>
                    <Text><![CDATA[]]></Text>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="DoubleProperty">
                      <Value>1000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Value" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>GreaterThan0</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="beh:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="beh:PulseSupplyPort1" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpBehaviorCommands</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="12" To="15" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="18" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>IsGiveRewardRight</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                <beh:OutputSet>SupplyPort1</beh:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                <beh:OutputSet>SupplyPort0</beh:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpBehaviorCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="12" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpBehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CameraControl</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpBehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TriggeredCamerasReady</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CameraState</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>CameraState</rx:Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateStartCamerasPayload">
                <beh:StartCameras>CameraOutput0</beh:StartCameras>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateStopCamerasPayload">
                <beh:StopCameras>CameraOutput0</beh:StopCameras>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpBehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartLogging</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CameraState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CameraState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CameraState</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="14" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SoundBoard</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>PlaySoundCue</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PlaySoundCue</Name>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreatePlaySoundOrFrequencyPayload">
                <p2:PlaySoundOrFrequency>0</p2:PlaySoundOrFrequency>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpSoundCardCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpBehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="5" To="7" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>